---
API: 2.1
OpenSesame: 3.2.4
Platform: posix
---
set width 1024
set uniform_coordinates no
set title Park_et_al_2017_withOpenSesame_and_PsychoPY
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/stavrostrakoshis/Documents/Neuroimaging/PHD/Exp_Psy_713/PsychoPY"
set disable_garbage_collection yes
set description "A template"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define inline_script Dynamic_fixation
	set description "Executes Python code"
	___run__
	# canvas is an object that takes stylish and timing args 
	# This script creates a "Dynamic fixation point", a modified version of Park et al 2017 and references therein. 
	
	
	from openexp.canvas import canvas
	
	#needed
	my_canvas = canvas()
	#stim style
	my_canvas.text('+', color='yellow', font_size=150)
	#print like
	my_canvas.show()
	#stim duration
	self.sleep(1000)
	
	
	my_canvas = canvas(exp)
	my_canvas.text('+', color='green', font_size=300)
	my_canvas.show()
	
	
	self.sleep(1000)
	
	
	my_canvas = canvas(exp)
	my_canvas.text('+', color='yellow', font_size=450)
	my_canvas.show()
	
	self.sleep(1000)
	__end__
	set _prepare ""

define sketchpad Dynamic_fixation_1
	# needed
	# stim style
	# print like
	# stim duration
	set duration keypress
	set description "Displays stimuli"

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="******<br />	In this experiment you will have to guess the orientation of a stimulus, after a cross appears, by pressing the left or right arrow.<br /><br /><br />Orientation is left or right<br />					******" x=-96 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press space to continue" x=0 y=192 z_index=0

define sketchpad Visual_instrunctions
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="gabor_minus.png" scale=1 show_if=always x=288 y=0 z_index=0
	draw image center=1 file="gabor_plus.png" scale=1 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=left x=-288 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=right x=288 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is an example of the stimuli" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press space to continue" x=0 y=256 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run Visual_instrunctions always
	run new_loop_2 always

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Gabor gabor_minus
	setcycle 0 correct_response left
	setcycle 0 new_column_1 ""
	setcycle 1 Gabor gabor_minus
	setcycle 1 correct_response right
	setcycle 1 new_column_1 ""
	setcycle 2 Gabor ""
	setcycle 2 correct_response ""
	setcycle 2 new_column_1 ""
	setcycle 3 Gabor ""
	setcycle 3 correct_response ""
	setcycle 3 new_column_1 ""
	setcycle 4 Gabor ""
	setcycle 4 correct_response ""
	setcycle 4 new_column_1 ""
	setcycle 5 Gabor ""
	setcycle 5 correct_response ""
	setcycle 5 new_column_1 ""
	setcycle 6 Gabor ""
	setcycle 6 correct_response ""
	setcycle 6 new_column_1 ""
	setcycle 7 Gabor ""
	setcycle 7 correct_response ""
	setcycle 7 new_column_1 ""
	run ""

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop new_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_script

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Dynamic_fixation_1 always
	run noise_before_1 always
	run noise_after_1 always
	run new_keyboard_response always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad new_sketchpad
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=120 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad noise_a
	set duration keypress
	set description "Displays stimuli"

define inline_script noise_after
	set description "Executes Python code"
	___run__
	noise_rc.draw()
	win.flip()
	
	
	noise_rc_2.draw()
	win.flip()
	
	noise_rc_3.draw()
	win.flip()
	
	noise_rc_4.draw()
	win.flip()
	
	noise_rc_5.draw()
	win.flip()
	
	noise_rc_6.draw()
	win.flip()
	
	noise_rc_7.draw()
	win.flip()
	__end__
	set _prepare ""

define sketchpad noise_after_1
	set duration keypress
	set description "Displays stimuli"

define sketchpad noise_b
	set duration keypress
	set description "Displays stimuli"

define inline_script noise_before
	set description "Executes Python code"
	set _run ""
	___prepare__
	# GratingStim is an object that takes texture, contrast, opacity, frequency etc args
	#from psychopy.
	
	#this script is hard coded for lack of better solution
	
	from psychopy.visual import GratingStim, core
	import psychopy
	import random
	
	
	Noise_rc = 0.21
	Noise_rc_2 = 0.10
	Noise_rc_3 = 0.05
	Noise_rc_4 = 0.03
	Noise_rc_5 = 0.80
	Noise_rc_6 = 0.50
	Noise_rc_7 = 1
	
	var.noise_rc = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc)
	noise_rc.draw()
	win.flip()
	
	win.close()
	
	
	var.noise_rc_2 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_2)
	noise_rc_2.draw()
	win.flip()
	
	win.close()
	
	var.noise_rc_3 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_3)
	noise_rc_3.draw()
	win.flip()
	
	win.close()
	
	var.noise_rc_4 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_4)
	noise_rc_4.draw()
	win.flip()
	
	win.close()
	
	var.noise_rc_5 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_5)
	noise_rc_5.draw()
	win.flip()
	
	win.close()
	
	
	var.noise_rc_6 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_6)
	noise_rc_6.draw()
	win.flip()
	
	win.close()
	
	var.noise_rc_7 = GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=Noise_rc_7)
	noise.rc_7.draw()
	win.flip()
	
	win.close()
	__end__

define sketchpad noise_before_1
	set duration keypress
	set description "Displays stimuli"

define inline_script trial_script
	set description "Executes Python code"
	___run__
	#First we want to create a Dybamic fixations as advertised on the reference publication
	#import the necessary
	from psychopy.visual import GratingStim
	import random
	import string
	
	#lets try pythonic conding
	
	Z = 0
	C = 0
	
	Orientations = [[45], [-45]]
	#Many of these
	MOrientations = Orientations * 1000
	
	
	
	
	Noise_list = [0.21, 0.10, 0.05, 0.03, 0.8, 0.5, 1]
	for C, i in enumerate(Noise_list):
		print(i)
		#This is supposed to be in every step of the loop
		log.write_vars()
		for X in range(0, 8, 1):
			#get a variable for trial number
			var.trialno = [X + Z]
			start_time = clock.time()
			#Get a variable for noise contrast by trial
			var.i = i
			var.C = C
			
			
			#Random Choice orientation
			
			RandOrientList = random.choice(MOrientations)
			#Make it an integer, by indexing
			RandOrient = RandOrientList[0]
			#Make this avariable for logger!!!
			var.orient = RandOrient
			
			#Dynamic_fix function from prepare
			Dynamic_fix(300)
			#Create noise
			noise_rc= GratingStim(win, tex='raisedCos', mask='gauss', sf=0.9, size=1000, phase=0.3, opacity=1, contrast=i)
			noise_rc.draw()
			win.flip()
			
			self.sleep(50)
			
			
		#Create Gabor target
			Gabor = canvas()
			Gabor.gabor(500, 500, RandOrient, .05, size=1000, stdev=120)
			Gabor.show()
			var.Gabor = Gabor
			self.sleep(50)
			
				#show noise again
			noise_rc.draw()
			win.flip()
			
			self.sleep(50)
			
			
			#Blank until response
			blank = canvas()
			blank.circle(500, 500, 700, fill=True, color=u'#808080')
			#Show blank until key press
			blank.show()
			#Define correct key presses
			key, time = my_keyboard.get_key(keylist=['left', u'right'])
			var.key = key
			
			#until a key is pressed
	
			self.sleep(0)
			log.write_vars()
	
			
			
			
			
				
	
	
	
		
			
			
	#var.response_time = var.timestamp()
	log.write_vars()
	__end__
	___prepare__
	#Function
	def Dynamic_fix (time):
	 
	#Dynamix fix
		first_canvas = canvas()
	#stim style
		first_canvas.text('+', color='yellow', font_size=150)
		first_canvas.show()
		self.sleep(time)
	
	
	#Gets bigger and with a differen colour
		second_canvas = canvas()
		second_canvas.text('+', color='green', font_size=300)
		second_canvas.show()
		self.sleep(time)
	
	#Gets even bigger and goes back to the default colour
		third_canvas = canvas()
		third_canvas.text('+', color='yellow', font_size=450)
		third_canvas.show()
		self.sleep(time)
	###
	
	#response?
	#var.kb = Keyboard()
	my_keyboard = keyboard()
	
	
	 
	__end__

